\                        C O M M E N T S
\===================================================================
            \OVERNIGHT 
\===================================================================

DISKFORMAT = 13
DISKVARS = W    \"DISKVARS" only prints selected variables to datafile
DISKCOLUMNS = 1


                   \  Inputs ****************************
^headIN =4        \  IR head entry detector

^LLever2 = 2       \  left lever press
^RLever2 = 1       \  right lever press


                   \  Outputs ****************************
^leftlever = 8
^rightlever = 7

^dipper = 6        \ On Liquid Dipper

^house = 1         \houselight



\  VARIABLES USED IN THIS PROGRAM
\   a = holder for lever press start
\   b = holder for lever press end
\   c = master timer (in seconds, with 1/10s resolution)
\   d = ITI dur, selected from list i
\   e =
\   f =
\   g =
\   h =
\   i = list array of ITI durations
\   j =
\   k = session clock
\   l =
\   m =
\   n =
\   o =
\   p =
\   q
\   r = lever press record
\   s =
\   t = master timer
\   u
\   v
\  (w) = time and event code for matlab
\   x =
\   y =
\   z =


\  \  SHOW POSITIONS
\  1 =
\  2 = Left Lever Responses
\  3 = trial counter
\  4 = Session Time (minutes)
\  5 = head entries
\  6 =

\===================================================================
\EVENT CODES USED IN THIS PROGRAM
\===================================================================


^DipOn = 0025   
^DipOff = 0026   
^LLeverOn = 0027 
^RLeverOn= 0028  
^LLeverOff = 0029 
^RLeverOff = 0030 


^StartSession = 0113  
^EndSession = 0114  

^OnFan = 0117
^OffFan = 0118

^PokeOff1 = 1001
^PokeOn1 = 1011

^LPressOn = 1015
^RPressOn = 1016
^LPressOff = 1017
^RPressOff = 1018
\================================================================


\Dimensionalize Event and Time code array
dim w=10000
dim a=2
dim b=2
dim k=4
dim r=2

\ITI duration list (in hundredths of seconds)
list i = 1000


\===============================
\   Z-PULSES USED IN THIS PROGRAM
\ z1 = left lever press indicator
\ z2 = right lever press indicator
\ z3 = end session
\ z4 =
\===============================

\===============================
\  Show Positions
\ 1 = Session Timer
\ 2 = Left Presses
\ 3 = Right Presses
\ 4 = Reinforcers
\ 5 = HE indicator
\===============================


s.s.1,  \MATLAB TIMER "T"
s1,
        0": SET p = -1; --->s2
s2,
        .01": SET T = T + 100000 --->sx \Keeps time in 100th of a second

S.S.2,    \INITIALIZE
s1,
           #start:~initANL926;~;~SetRack (MG, 2);~;
        ~SetAmp (MG,BOX, 90);~;
        ~SetRF (MG,BOX, 10);~;~SetFreq (MG,BOX, 2500);~;

         ON^house; add p; set w(p)= ^HouseLightOn + T--->s2

s2,  \end after 60 reinforcers or 60 minutes
    #z3: Off^rightlever;add p; set w(p)=^RLeverOff+T;--->s3
    1080': Off^rightlever;add p; set w(p)=^RLeverOff+T;--->s3
s3,
        10": OFF^house;add p; set w(p) = ^HouseLightOff + T;

            add p; set w(p)= ^EndSession + T;
            add p; set w(p)=-987.987;--->stopabortflush

s.s.3,  \TRIAL AND ITI GENERATOR
s1,
        #start:add p; set w(p)= ^StartSession + T;
                ON^Rightlever; add p; set w(p)=^RLeverOn+T;--->s2
s2,
        #z2: add n; ON^dipper; add j; show 4, Dips, j;
             add p; set w(p)=^DipOn+T--->s3
s3,
        .5":~ondur(MG,BOX,200);~;--->s4
s4,
         4.5":OFF^dipper;add p;set w(p)=^DipOff+T;
        if j>499 [@end, @more]
            @end: z3 --->s1
            @more: if n>19 [@timeout, @more]
                @timeout: randd d=i; Off^Rightlever;add p; set w(p)=^RLeverOff+T;--->s5
                @more: --->s2
s5,
        d#t: ON^rightlever;add p;set w(p)=^RLeverOn+T; set n=0--->s2

S.S.4,  \Head Entry (Input 3) COUNTER
s1,
     #START:SHOW 5,HeadIn,0--->S2
s2,
      #R^headIN: SHOW 5,HeadIn,1; add p; set w(p) = ^PokeOn1 + T---> sx


S.S.5,  \Bar Press Detector - Left Lever - not used in this program
s1,
    #Start: --->s2
s2,
       .05": if a(0) > 0 [@press, @nopress]
            @press: if b(0) = 0 [@leveron, @noleveron]
                   @leveron: z1;  add p; set w(p)= ^LPressOn+T;
                           add r(0); show 2, LeftPress, r(0);
                            set b(0) = 1; set a(0) = 0; --->s2
                    @noleveron: set b(0) = 1; set a(0) = 0--->s2
        @nopress: if b(0) = 1 [@stop, @nostop]
                @stop:  add p;set w(p)= ^LPressOff+T;
                      set b(0) = a(0); set a(0) = 0; --->s2
                @nostop:set b(0) = a(0); set a(0) = 0; --->s2
        #R^LLever2: set a(0)=a(0)+1; --->sx

S.S.6,  \Bar Press Detector - Right Lever
s1,
    #Start: --->s2
s2,
       .05": if a(1) > 0 [@press, @nopress]
            @press: if b(1) = 0 [@leveron, @noleveron]
                    @leveron: z2; add p;set w(p)= ^RPressOn+T;
                            add r(1); show 3, RightPress, r(1);
                           set b(1) = 1; set a(1) = 0; --->s2
                    @noleveron: set b(1) = 1; set a(1) = 0--->s2
            @nopress: if b(1) = 1 [@stop, @nostop]
                    @stop:   add p;set w(p)= ^RPressOff+T;
                          set b(1) = a(1); set a(1) = 0; --->s2
                    @nostop:set b(1) = a(1); set a(1) = 0; --->s2
        #R^RLever2: set a(1)=a(1)+1; --->sx

S.S.7, \Session Duration Clock
s1,
    #start:--->s2
s2,
    1":    set k(0)=k(0)+.01; if k(0)>.59 [@AddMin, @NoAdd]
            @AddMin: add k(1); set k(0)=0; set k(2)=k(0)+k(1);
                 show 1, Session, k(2)--->s2
            @NoAdd: set k(2)=k(0)+k(1); show 1, Session, k(2)--->s2
